---
API: 2.1
OpenSesame: 3.3.14
Platform: nt
---
set width 1920
set uniform_coordinates yes
set title "Visual World Paradigm"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend legacy
set keyboard_backend legacy
set height 1080
set fullscreen no
set form_clicks no
set foreground black
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "C:\\Users\\yarbus\\Desktop\\TeamPegasus"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend legacy
set background white

define coroutines coroutines_for_response
	set function_name ""
	set flush_keyboard yes
	set end_after_item ""
	set duration 8000
	set description "Run items simultaneously"

define sketchpad end_text
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=serif font_italic=no font_size=48 html=yes show_if=always text="End of experiment<br /><br />Thank you for your participation<br /><br />Press any key to continue" x=0 y=0 z_index=0

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run welcome always
	run instructions always
	run set_position_variables always
	run pygaze_init always
	run pygaze_start_recording always
	run trial_loop always
	run pygaze_stop_recording always
	run end_text always

define sampler fixate_prompt_1
	set volume 1
	set stop_after 0
	set sample "fixate.wav"
	set pitch 0.7
	set pan 0
	set fade_in 0
	set duration sound
	set description "Plays a sound file in .wav or .ogg format"

define sampler fixate_prompt_2
	set volume 1
	set stop_after 0
	set sample "now_fixate.wav"
	set pitch 0.7
	set pan 0
	set fade_in 0
	set duration sound
	set description "Plays a sound file in .wav or .ogg format"

define sketchpad fixation
	set duration 0
	set description "Displays stimuli"
	draw fixdot color=black show_if=always style=default x=0 y=0 z_index=0

define notepad getting_started
	set note "HELP ME!!!!"
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define sketchpad grid_stimulus
	set duration 3000
	set description "Displays stimuli"
	draw image center=1 file="grid.png" scale=0.4 show_if=always x=0 y=0 z_index=0
	draw fixdot color=black show_if=always style=default x=0 y=0 z_index=0
	draw image center=1 file="[img_top]" name=img_top scale=0.8 show_if=always x=0 y=-266 z_index=0
	draw image center=1 file="[img_left]" name=img_left scale=0.8 show_if=always x=-266 y=0 z_index=0
	draw image center=1 file="[img_right]" name=img_right scale=0.8 show_if=always x=266 y=0 z_index=0
	draw image center=1 file="[img_bottom]" name=img_bottom scale=0.8 show_if=always x=0 y=266 z_index=0

define pygaze_start_recording ignore
	set status_msg start_trial
	set description "Puts the eye tracker into recording mode"

define pygaze_start_recording ignore_1
	set status_msg start_trial
	set description "Puts the eye tracker into recording mode"

define sketchpad instructions
	set duration mouseclick
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=serif font_italic=no font_size=36 html=yes show_if=always text="In each trial:<br /><br />1. you can freely look at the four stimulus (objects) <br />on the screen until you hear an audio prompt<br /><br />2. follow the audio prompt to fixate<br /><br />3. trial continues on successful fixation<br /><br />4. audio prompt will ask you to click on a certain <br />object displayed on the grid<br /><br />5. trial continues on mouse click" x=0 y=0 z_index=0
	draw textline center=1 color=black font_bold=no font_family=serif font_italic=yes font_size=24 html=yes show_if=always text="Click to continue" x=0 y=416 z_index=0

define pygaze_log log_audio_target_end
	set throttle 16
	set msg log_audio_target_end
	set description "Writes information to the eye-tracker logfile"
	set auto_log no

define pygaze_log log_audio_target_start
	set throttle 16
	set msg log_audio_target_start
	set description "Writes information to the eye-tracker logfile"
	set auto_log no

define pygaze_log log_click_response_end
	set throttle 16
	set msg click_response_end
	set description "Writes information to the eye-tracker logfile"
	set auto_log no

define pygaze_log log_final_fixation_end
	set throttle 16
	set msg final_fixation_end
	set description "Writes information to the eye-tracker logfile"
	set auto_log no

define pygaze_log log_final_fixation_start
	set throttle 16
	set msg "final_fixation_start, selected: [clicked]"
	set description "Writes information to the eye-tracker logfile"
	set auto_log no

define pygaze_log log_fixate_center_audio_onset
	set throttle 16
	set msg "fixate_center_audio_onset, cond: [condition] target: [target]"
	set description "Writes information to the eye-tracker logfile"
	set auto_log no

define pygaze_log log_gaze_start
	set throttle 16
	set msg centre_gaze_start
	set description "Writes information to the eye-tracker logfile"
	set auto_log no

define pygaze_log log_instruction_to_click_onset
	set throttle 16
	set msg instruction_to_click_onset
	set description "Writes information to the eye-tracker logfile"
	set auto_log no

define logger logger
	set description "Logs experimental data"
	set auto_log yes

define inline_script new_inline_script_1
	set description "Executes Python code"
	set _run ""
	set _prepare ""

define mouse_response new_mouse_response
	set timeout infinite
	set show_cursor yes
	set linked_sketchpad ""
	set flush yes
	set event_type mouseclick
	set duration mouseclick
	set description "Collects mouse responses"

define pygaze_drift_correct new_pygaze_drift_correct
	set ypos 0
	set xpos 0
	set target_style default
	set target_color "[foreground]"
	set fixation_triggered no
	set draw_target yes
	set description "Perform eye-tracker drift correction"

define pygaze_drift_correct new_pygaze_drift_correct_1
	set ypos 0
	set xpos 0
	set target_style default
	set target_color "[foreground]"
	set fixation_triggered no
	set draw_target yes
	set description "Perform eye-tracker drift correction"

define pygaze_drift_correct new_pygaze_drift_correct_2
	set ypos 0
	set xpos 0
	set target_style default
	set target_color "[foreground]"
	set fixation_triggered yes
	set draw_target yes
	set description "Perform eye-tracker drift correction"

define pygaze_drift_correct new_pygaze_drift_correct_3
	set ypos 0
	set xpos 0
	set target_style default
	set target_color "[foreground]"
	set fixation_triggered no
	set draw_target yes
	set description "Perform eye-tracker drift correction"

define pygaze_drift_correct new_pygaze_drift_correct_4
	set ypos 0
	set xpos 0
	set target_style default
	set target_color "[foreground]"
	set fixation_triggered no
	set draw_target yes
	set description "Perform eye-tracker drift correction"

define pygaze_log new_pygaze_log
	set throttle 2
	set msg ""
	set description "Writes information to the eye-tracker logfile"
	set auto_log no

define pygaze_log new_pygaze_log_1
	set throttle 2
	set msg ""
	set description "Writes information to the eye-tracker logfile"
	set auto_log no

define pygaze_start_recording new_pygaze_start_recording
	set status_msg start_trial
	set description "Puts the eye tracker into recording mode"

define repeat_cycle new_repeat_cycle
	set description "Optionally repeat a cycle from a loop"
	__condition__
	[cursor_roi]="" or [cursor_roi]="stim0"
	__end__

define sampler new_sampler
	set volume 1
	set stop_after 0
	set sample "[audio_file]"
	set pitch 0.7
	set pan 0
	set fade_in 0
	set duration sound
	set description "Plays a sound file in .wav or .ogg format"

define sampler new_sampler_1
	set volume 1
	set stop_after 0
	set sample "Click_on_the_shortened.wav"
	set pitch 0.7
	set pan 0
	set fade_in 0
	set duration sound
	set description "Plays a sound file in .wav or .ogg format"

define sampler new_sampler_1_1
	set volume 1
	set stop_after 0
	set sample "example-beaker.wav"
	set pitch 0.7
	set pan 0
	set fade_in 0
	set duration sound
	set description "Plays a sound file in .wav or .ogg format"

define sketchpad next_trial_screen
	set duration mouseclick
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=serif font_italic=no font_size=36 html=yes show_if=always text="Click to continue" x=0 y=96 z_index=0
	draw fixdot color=black show_if=always style=default x=0 y=0 z_index=0

define pygaze_init pygaze_init
	set tracker_type OpenGaze
	set tobiiglasses_udpport 49152
	set tobiiglasses_address "192.168.71.50"
	set smi_send_port 4444
	set smi_recv_port 5555
	set smi_ip "127.0.0.1"
	set sacc_vel_thr 35
	set sacc_acc_thr 9500
	set eyelink_pupil_size_mode area
	set eyelink_force_drift_correct yes
	set description "Initialize and calibrate eye tracker"
	set calibrate no
	set calbeep yes
	set alea_api_key "Contact Alea for an API key"
	set alea_animated_calibration no
	set _logfile automatic

define pygaze_log pygaze_log_trial_start
	set throttle 16
	set msg "start_trial: [count_trial_sequence] t: [img_top] r: [img_right] b: [img_bottom] l: [img_left]"
	set description "Writes information to the eye-tracker logfile"
	set auto_log no

define pygaze_start_recording pygaze_start_recording
	set status_msg start_exp
	set description "Puts the eye tracker into recording mode"

define pygaze_stop_recording pygaze_stop_recording
	set status_msg stop_exp
	set description "Stops recording of eye tracking data"

define inline_script randomize_positions
	set description "Executes Python code"
	set _run ""
	___prepare__
	import random
	import time
	
	random.seed(time.time())
	
	order = [var.referant, var.cohort, var.rhyme, var.distractor]
	idx_std = list(enumerate(order))
	
	random.shuffle(idx_std)
	
	indices, order = zip(*idx_std)
	
	var.img_top = order[0] + '.png'
	var.img_left = order[1] + '.png'
	var.img_right = order[2] + '.png'
	var.img_bottom = order[3] + '.png'
	
	var.audio_file = var.target.split(".")[0] + ".wav"
	__end__

define inline_script record_clicked_object
	set description "Executes Python code"
	___run__
	var.clicked = 'none'
	if var.cursor_roi != 'undefined':
	    var.clean_roi_val = var.cursor_roi.split(';')[-1]
	    
	    if var.clean_roi_val != '' and var.clean_roi_val != 'stim0':
	        var.clicked = var.get(var.clean_roi_val)
	clock.sleep(800)
	__end__
	set _prepare ""

define inline_script set_position_variables
	set description "Executes Python code"
	___run__
	exp.set('img_top', 'beaker.png')
	exp.set('img_left', 'beaker.png')
	exp.set('img_bottom', 'beaker.png')
	exp.set('img_right', 'beaker.png')
	
	exp.set('condition', -1)
	exp.set('target',-1)
	
	exp.set('audio_file', 'beaker.wav')
	
	exp.set('count_trial_sequence', 0)
	__end__
	set _prepare ""

define loop trial_loop
	set source_file "stimuli.csv"
	set source file
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 5
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 referant "beaker.png"
	setcycle 0 cohort "beetle.png"
	setcycle 0 rhyme "speaker.png"
	setcycle 0 distractor "carriage.png"
	setcycle 1 referant "beaker.png"
	setcycle 1 cohort "beetle.png"
	setcycle 1 rhyme "speaker.png"
	setcycle 1 distractor "carriage.png"
	setcycle 2 referant "beaker.png"
	setcycle 2 cohort "beetle.png"
	setcycle 2 rhyme "speaker.png"
	setcycle 2 distractor "carriage.png"
	setcycle 3 referant "beaker.png"
	setcycle 3 cohort "beetle.png"
	setcycle 3 rhyme "speaker.png"
	setcycle 3 distractor "carriage.png"
	setcycle 4 referant "beaker.png"
	setcycle 4 cohort "beetle.png"
	setcycle 4 rhyme "speaker.png"
	setcycle 4 distractor "carriage.png"
	run trial_sequence

define mouse_response trial_response
	set timeout infinite
	set show_cursor yes
	set linked_sketchpad grid_stimulus
	set flush yes
	set event_type mouseclick
	set duration mouseclick
	set description "Collects mouse responses"

define sequence trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run randomize_positions always
	run pygaze_log_trial_start always
	run grid_stimulus always
	run log_fixate_center_audio_onset always
	run fixate_prompt_1 always
	run log_gaze_start always
	run wait_for_centre_gaze always
	run log_instruction_to_click_onset always
	run new_sampler_1 always
	run log_audio_target_start always
	run new_sampler always
	run log_audio_target_end always
	run trial_response always
	run log_click_response_end always
	run record_clicked_object always
	run fixate_prompt_2 always
	run log_final_fixation_start always
	run wait_for_centre_gaze_at_end always
	run log_final_fixation_end always
	run next_trial_screen always
	run logger always

define inline_script wait_for_centre_gaze
	set description "Executes Python code"
	set _run ""
	___prepare__
	import math
	
	tolerance = 200
	diff = 800
	def wait_for_gaze(point):
	    # start_time = clock.time()
	    time_sample = clock.time()
	    while True:
	        if clock.time()-time_sample > diff:
	            gazepos = eyetracker.sample()
	            # check the distance between the sample and the centre
	            # of the screen
	            d = math.sqrt((gazepos[0] - point[0])**2 + (gazepos[1] - point[1])**2)
	            # check if the distance is 'small enough'
	            if d < tolerance:
	                return
	            # implement a timeout
	            # if clock.time() - start_time > 20000:
	            #     eyetracker.calibrate()
	            time_sample = clock.time()
	        
	def wait_for_gaze_for(point, duration):
	    start_time = clock.time()
	    # timeout_timer = clock.time()
	    time_sample = clock.time()
	    while True:
	        if clock.time()-time_sample > diff:
	            gazepos = eyetracker.sample()
	            # check the distance between the sample and the centre
	            # of the screen
	            d = math.sqrt((gazepos[0] - point[0])**2 + (gazepos[1] - point[1])**2)
	            # check if the distance is 'small enough'
	            if d < tolerance:
	                if clock.time() - start_time > duration:
	                    return
	            else:
	                start_time = clock.time()
	            # implement a timeout
	            # if clock.time() - timeout_timer > 20000:
	            #     eyetracker.calibrate()
	            #     timeout_timer = clock.time()
	            time_sample = clock.time()
	
	# compute the screen centre coordinates
	centre = (exp.width/2, exp.height/2)
	
	wait_for_gaze(centre)
	#clock.sleep(100)
	__end__

define inline_script wait_for_centre_gaze_at_end
	set description "Executes Python code"
	set _run ""
	___prepare__
	import math
	
	tolerance = 200
	diff = 500
	def wait_for_gaze(point):
	    # start_time = clock.time()
	    time_sample = clock.time()
	    while True:
	        if clock.time()-time_sample > diff:
	            gazepos = eyetracker.sample()
	            # check the distance between the sample and the centre
	            # of the screen
	            d = math.sqrt((gazepos[0] - point[0])**2 + (gazepos[1] - point[1])**2)
	            # check if the distance is 'small enough'
	            if d < tolerance:
	                return
	            # implement a timeout
	            # if clock.time() - start_time > 20000:
	            #     eyetracker.calibrate()
	            time_sample = clock.time()
	        
	def wait_for_gaze_for(point, duration):
	    start_time = clock.time()
	    # timeout_timer = clock.time()
	    time_sample = clock.time()
	    while True:
	        if clock.time()-time_sample > diff:
	            gazepos = eyetracker.sample()
	            # check the distance between the sample and the centre
	            # of the screen
	            d = math.sqrt((gazepos[0] - point[0])**2 + (gazepos[1] - point[1])**2)
	            # check if the distance is 'small enough'
	            if d < tolerance:
	                if clock.time() - start_time > duration:
	                    return
	            else:
	                start_time = clock.time()
	            # implement a timeout
	            # if clock.time() - timeout_timer > 20000:
	            #     eyetracker.calibrate()
	            #     timeout_timer = clock.time()
	            time_sample = clock.time()
	            
	# compute the screen centre coordinates
	centre = (exp.width/2, exp.height/2)
	
	wait_for_gaze(centre)
	#clock.sleep(100)
	__end__

define sketchpad welcome
	set start_response_interval no
	set reset_variables no
	set duration mouseclick
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=serif font_italic=no font_size=50 html=yes show_if=always text="Welcome to our <br />Visual World Paradigm experiment" x=-15 y=-256 z_index=0
	draw textline center=1 color=black font_bold=no font_family=serif font_italic=no font_size=40 html=yes show_if=always text="The experiment comprises of 36 trials. In each trial, you need<br /> to follow the audio prompts and perform tasks like fixating<br /> on the centre of the screen and clicking on the object specified <br />in the audio prompt." x=-14 y=250 z_index=0
	draw image center=1 file="pegasus.png" scale=0.40000000000000013 show_if=always x=-32 y=-32 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=yes font_size=24 html=yes show_if=always text="Click to continue" x=0 y=448 z_index=0

